PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = colour discrimination task
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor = -1.0000, -1.0000, 1.0000
      lineColor = -1.0000, -1.0000, 1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine red_square
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    PolygonComponent polygon_2
      fillColor = 1.0000, -1.0000, -1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blue_square
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    PolygonComponent polygon_3
      fillColor = -1.0000, -1.0000, 1.0000
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    KeyboardComponent key_resp_3
      allowedKeys [set every repeat] = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine trial
    Routine red_square
    Routine blue_square
  LoopTerminator trials
